CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^AssayPlate_PerkinElmer_CellCarrier-96_(?P<WellID>.*)_T(?P<TimePt>.*)F(?P<FOV>.*)L(?P<Lvar>.*)A(?P<Avar>.*)Z(?P<Zvar>.*)C(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C01.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02.tif")
    Name to assign these images:CaFITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C03.tif")
    Name to assign these images:TOM20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C04.tif")
    Name to assign these images:Candida_iRFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:WellID

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.006,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:TOM20
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.002,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CaFITC
    Name the primary objects to be identified:TotalCa
    Typical diameter of objects, in pixel units (Min,Max):20,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:TotalCa
    Name the output objects:TotalCaExpand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
SplitOrMergeObjects:[module_num:9|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
    Select the input objects:TotalCa
    Name the new objects:TotalCaNetwork
    Operation:Merge
    Maximum distance within which to merge objects:2
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Candida_iRFP
    Name the primary objects to be identified:LiveCa
    Typical diameter of objects, in pixel units (Min,Max):2,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.6
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0015,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:15
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:11|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
    Select the input objects:LiveCa
    Name the new objects:LiveCaNetwork
    Operation:Merge
    Maximum distance within which to merge objects:4
    Merge using a grayscale image?:No
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    Merging method:Distance
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
OverlayOutlines:[module_num:12|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CaFITC
    Name the output image:Total_LiveOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#24E61A
    Select objects to display:TotalCaNetwork
    Select outline color:#CB30CF
    Select objects to display:LiveCaNetwork

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:CaFITC, Candida_iRFP, DAPI, TOM20
    Select objects to measure:Cells, LiveCa, LiveCaNetwork, Nuclei, TotalCa, TotalCaExpand, TotalCaNetwork

MeasureImageAreaOccupied:[module_num:14|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, LiveCa, LiveCaNetwork, Nuclei, TotalCa, TotalCaExpand, TotalCaNetwork

FilterObjects:[module_num:15|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
    Select the objects to filter:TotalCaExpand
    Name the output objects:Live_Ca
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Dead_Ca
    Select the measurement to filter by:Intensity_MeanIntensity_Candida_iRFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0021
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:16|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
    Name the output measurement:CaObject_Math
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Dead_Ca
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_TotalCaExpand
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:17|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
    Select the objects to filter:TotalCaNetwork
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:DeadCaNetwork
    Select the measurement to filter by:Intensity_MeanIntensity_Candida_iRFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0015
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:18|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
    Name the output measurement:CaNetwork_Math
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_DeadCaNetwork
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_TotalCaNetwork
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:19|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
    Parent objects:Cells
    Child objects:Live_Ca
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Macrophage_Live_Ca
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
RelateObjects:[module_num:20|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
    Parent objects:Cells
    Child objects:Dead_Ca
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Macrophage_Dead_Ca
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\University of Michigan Dropbox\\MED-OMEARALABBOX\\O'Meara lab box\\Mike\\1-EXPERIMENTS\\SM17 - Drug Screen Pilot\\CP\\Excel\\Run3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:LiveCa|Intensity_MinIntensityEdge_CaFITC,LiveCa|Intensity_MinIntensityEdge_DAPI,LiveCa|Intensity_MinIntensityEdge_Candida_iRFP,LiveCa|Intensity_MinIntensityEdge_TOM20,LiveCa|Intensity_MinIntensity_Candida_iRFP,LiveCa|Intensity_MinIntensity_CaFITC,LiveCa|Intensity_MinIntensity_DAPI,LiveCa|Intensity_MinIntensity_TOM20,LiveCa|Intensity_MedianIntensity_Candida_iRFP,LiveCa|Intensity_MedianIntensity_DAPI,LiveCa|Intensity_MedianIntensity_TOM20,LiveCa|Intensity_MedianIntensity_CaFITC,LiveCa|Intensity_MeanIntensityEdge_DAPI,LiveCa|Intensity_MeanIntensityEdge_TOM20,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SM17_Run3_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Total_LiveOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:CaFITC
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Elsewhere...|D:\\University of Michigan Dropbox\\MED-OMEARALABBOX\\O'Meara lab box\\Mike\\1-EXPERIMENTS\\SM17 - Drug Screen Pilot\\CP\\Pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:23|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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